begin model
begin parameters
	ITERATIONS  100000
	TIME_STEP  5e-06
	VACANCY_SEARCH_DISTANCE  100
	Nav  6.022e8               # Avogadro number based on a volume size of 1 cubic um */
	rxn_layer_t  0.01
	vol_wall  56.5695045056029  #Surface area*/
	vol_EC  39
	vol_PM  4.836624601  #Surface area*/
	vol_CP  1
	NaV  602200000
	Lig_tot  6.0e3
	Rec_tot  4.0e2
	kp1  100/120
	km1  0.01
	kp2  100/120
	km2  0.01
	T  298.15      # Temperature, K */
	h  rxn_layer_t      # Thickness of 2D compartment, um */
	Rs  0.002564      # Radius of a (spherical) molecule in 3D compartment, um */
	Rc  0.0015      # Radius of a (cylindrical) molecule in 2D compartment, um */
	gamma  0.5722      # Euler's constant */
	KB  1.3806488e-19     # Boltzmann constant, cm^2.kg/K.s^2 */
	mu_wall  1e-9      # Viscosity in compartment wall, kg/um.s */
	mu_EC  1e-9      # Viscosity in compartment EC, kg/um.s */
	mu_PM  1e-9      # Viscosity in compartment PM, kg/um.s */
	mu_CP  1e-9      # Viscosity in compartment CP, kg/um.s */
end parameters
begin molecule types
	Lig(l,l)
	Rec(a)
end molecule types
begin seed species
	 Lig(l,l)  90
	 Rec(a)  102
end seed species
begin observables
	Species RecFree Rec(a)
	Species LigFree Lig(l,l)
	Species RecBound Lig(l!+,l), Lig(l!+,l!+)
	Species Dimers Lig(l!+,l!+)
end observables
begin reaction rules
	Rec(a) + Lig(l,l) <-> Lig(l!1,l).Rec(a!1) kp1,km1
	Rec(a) + Lig(l,l!+) <-> Lig(l!2,l!+).Rec(a!2) kp2,km2
end reaction rules
end model
generate_network({overwrite=>1})
simulate({method=>"ssa", t_start=>0,t_end=>0.005,n_steps=>1000})
#writeSBML()
